PsychoPy2experiment version="2026.1.1"
Settings
  Audio lib = ptb
  End Message = Thank you for your participation.
  Experiment info = {'participant':'f"{randint(0, 999999):06.0f}"', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = deeppsych_exp
  keyboardBackend = PsychToolbox
  runMode = 0
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Routines
  Routine WelcomeScreen
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    TextComponent welcome_text
      color = black
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      units = norm
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      text:
        Welcome to the Reaction Time Task.

        In this experiment, you will see a fixation cross (+) followed by a green circle.

        Your task is to press the SPACEBAR as quickly as possible when you see the green circle.

        Please keep your finger resting on the Spacebar. Try to be both fast and accurate.

        Press 'Enter' to continue.
    KeyboardComponent welcome_key
      allowedKeys = 'return'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine FixationPractice
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    TextComponent fixation_cross_prac
      color = black
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      text = +
      units = norm
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  Routine TargetPractice
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    ImageComponent target_circle_prac
      image [set every repeat] = green_circle.png
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      size = (0.2, 0.2)
      units = norm
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    KeyboardComponent response_prac
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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  Routine ITIPractice
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    TextComponent blank_iti_prac
      color = black
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
      units = norm
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  Routine MainInstruction
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    TextComponent main_instr_text
      color = black
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      units = norm
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      text:
        Practice complete. The main experiment will now begin.

        There will be 50 trials. No feedback will be given during this phase.

        Remember: Press the Spacebar as soon as you see the green circle.

        Press 'Enter' to start.
    KeyboardComponent main_instr_key
      allowedKeys = 'return'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine FixationMain
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    TextComponent fixation_cross_main
      color = black
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      text = +
      units = norm
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  Routine TargetMain
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    ImageComponent target_circle_main
      image [set every repeat] = green_circle.png
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      size = (0.2, 0.2)
      units = norm
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    KeyboardComponent response_main
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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  Routine ITIMain
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    TextComponent blank_iti_main
      color = black
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
      units = norm
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  Routine EndScreen
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    TextComponent end_text
      color = black
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3.0
      units = norm
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      text:
        Experiment Complete.

        Thank you for your participation.
        Your data has been saved.

        You may now remove your headphones and inform the experimenter.
Flow
  Routine WelcomeScreen
  LoopInitiator PracticeLoop loopType="TrialHandler"
    loopType = random
    nReps = 1
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    Routine FixationPractice
    Routine TargetPractice
    Routine ITIPractice
  LoopTerminator PracticeLoop
  Routine MainInstruction
  LoopInitiator MainLoop loopType="TrialHandler"
    loopType = fullRandom
    nReps = 10
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    Routine FixationMain
    Routine TargetMain
    Routine ITIMain
  LoopTerminator MainLoop
  Routine EndScreen
